PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2022.1.3
  Window size (pixels) = [1440, 900]
  expName = RejectionTask_OneLoop
  keyboardBackend = PsychToolbox
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Routines
  Routine Welcome_Screen
    TextComponent Welcome
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Instagram Sharing Task!







        Press space to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Before Experiment:
        import itertools
        import pandas as pd
        import numpy as np
        import random
        from PIL import Image
        sociallevel = ["Rej", "Acc", "Neutral"]
        condition = random.sample(sociallevel,3)
        block = 0 #before experiment
  Routine First_Instructions
    TextComponent FirstInstructions
      letterHeight = 0.05
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
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      text:
        To begin, you will be assigned a partner at random by the computer.


        Next, you will share your instagram photos with your partner.


        After sharing each photo, your partner will give you feedback on whether they liked or disliked your photo.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_Match
    TextComponent PlayerMatch
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Feedback_Positive
    TextComponent PositiveFeedback
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Charlie liked your photo!
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    ImageComponent positiveinstagram
      image = Images/like and dislike.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Negative_Feedback
    TextComponent Feedback_Negative
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Charlie did not like your photo.
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    ImageComponent image_2
      image = Images/thumbs down emoji.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Positive_Feedback
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Sam liked your photo!
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    ImageComponent image_4
      image = Images/like and dislike.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Negative_Feedback_2
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Sam did not like your photo.
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    ImageComponent image_5
      image = Images/thumbs down emoji.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Cross
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Feedback
    TextComponent response
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $Feedback
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    ImageComponent image_6
      image = $Stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Block2_WaitingMatch2
    TextComponent secondparnter
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a new partner.
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    TextComponent syncing2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    PolygonComponent polygon_2
      fillColor = none
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    TextComponent loading_25
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent loading_1
      fillColor = white
      pos = (-0.375, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent loading_50
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 5.50
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent loading_2
      fillColor = white
      pos = (-.25, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 5.50
      stopVal [duration (s)] = 1.25
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    TextComponent loading_75
      letterHeight = 0.08
      pos = (0,-0.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent loading_3
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent loading_100
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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    PolygonComponent loading_full
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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  Routine Block2_Match
    ImageComponent nerdface
      image = Images/nerd emoji.jpeg
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Sam
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        You matched with Sam!








        Press space to continue.
  Routine Block2_Photo
    ImageComponent image_3
      image = Images/Image_One.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent text
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = This photo will now be shared with Sam. Please wait for feedback.
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  Routine Block2_Waitingforfeedback
    TextComponent text_6
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Waiting…
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  Routine Block2_Fixation
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Block2_choice
    TextComponent choice
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You will now have the option to play a lottery game!




        Would you like to play or have the computer play on your behalf?
    TextComponent block2computer
      letterHeight = 0.04
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      text = Computer
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    TextComponent self
      letterHeight = 0.1
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      text = self
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    KeyboardComponent key_resp_7
      allowedKeys = 'c','m',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        block2response_msg = ' '
        block2feedback_msg = ' '
        block2computer_choice = ['lower','higher']
      Each Frame:
        import random
        random_entry = random.choice(block2computer_choice)
  Routine Block2_Lotterycomputerchoice
    TextComponent instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 7.
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    TextComponent computerresponse2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = $block2response_msg
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        block2response_msg = (f'The computer has chosen {random_entry}.')
        if key_resp_7.keys == 'm':
            continueRoutine = False
    ImageComponent card
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block2_Lotteryselfchoice
    TextComponent instructionsforselfchoice2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Please select whether you believe the card will be higher or lower than 5.
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    TextComponent block2_higherchoice
      letterHeight = 0.1
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Higher
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    TextComponent block2_lowerchoice
      letterHeight = 0.1
      pos = (-.3, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Lower
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    KeyboardComponent key_resp_8
      allowedKeys = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent block2_responsefeedback
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $block2feedback_msg
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_7.keys == 'c':
            continueRoutine = False
      Each Frame:
        if key_resp_8.keys == 'l':
            block2feedback_msg = (f'You have chosen lower.')
        elif key_resp_8.keys == 'h':
            block2feedback_msg = (f'You have chosen higher.')
        else:
            block2feedback_msg = (f'No response recorded.')
        block2responsefeedback.setText(feedback_msg)
        print(key_resp_5.keys)
        print(feedback_msg)
    ImageComponent block2_cardimage
      disabled = True
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block3_waitingtomatch
    TextComponent block3_match
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a new partner.
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    TextComponent syncing3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    PolygonComponent polygon3
      fillColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    TextComponent loading25
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent block3loading1
      fillColor = white
      pos = (-0.375, 0)
      shape = triangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent loading50
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent block3loading2
      fillColor = white
      pos = (-.25, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
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    TextComponent loading75
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent blockloading3
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent loading100
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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    PolygonComponent block3loadingfull
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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  Routine Block3_Match
    TextComponent block3match
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have matched with Riley!







        Press space to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image_8
      image = Images/sillyemoji.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Block3_Photo
    ImageComponent image_9
      image = Images/Image_One.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_9
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This photo will now be shared with Riley. Please wait for feedback.
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  Routine Block3_Waitingforfeedback
    TextComponent text_10
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Waiting…
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  Routine Block3_feedback
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $Response
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    ImageComponent image_10
      image [set every frame] = $Graphic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Block3_Fixation
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Block3_Choice
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        block3response_msg = ' '
        block3feedback_msg = ' '
        block3computer_choice = ['lower','higher']
      Each Frame:
        import random
        random_entry = random.choice(block3computer_choice)
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block3_choice
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You will now have the option to play a lottery game!




        Would you like to play or have the computer play on your behalf?
    TextComponent block3_computer
      letterHeight = 0.04
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Computer
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    TextComponent block3_self
      letterHeight = 0.04
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Self
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  Routine Block3_lotterycomputerchoice
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        response_msg = (f'The computer has chosen {random_entry}.')
        if key_resp_13.keys == 'm':
            continueRoutine = False
    TextComponent Block3_lotcomputerchoice
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 3.
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    TextComponent Block3_computerresponse
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = $block3response_msg
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    ImageComponent block3_cardimage
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block3_lotteryselfchoice
    TextComponent block3_lotteryintstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Please select whether you believe the card will be higher or lower than 5.
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    TextComponent block3_higher
      letterHeight = 0.05
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Higher
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    TextComponent block3_lower
      letterHeight = 0.05
      pos = (-.3, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Lower
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    KeyboardComponent key_resp_14
      allowedKeys = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    ImageComponent image_12
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent block3_feedbackresponse
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text = $block3response_msg
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_13.keys == 'c':
            continueRoutine = False
      Each Frame:
        if key_resp_14.keys == 'l':
            block3feedback_msg = (f'You have chosen lower.')
        elif key_resp_14.keys == 'h':
            block3feedback_msg = (f'You have chosen higher.')
        else:
            block3feedback_msg = (f'No response recorded.')
        block3responsefeedback.setText(feedback_msg)
        print(key_resp_5.keys)
        print(feedback_msg)
  Routine Block2_Feedback
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $Response
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    ImageComponent image_11
      image [set every frame] = $Graphic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine WaitingToMatch
    TextComponent Match
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a game partner selected at random by the computer.
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    TextComponent syncing
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    PolygonComponent Transparent
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 1.2
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    PolygonComponent Loading_25
      fillColor = white
      pos = (-0.375, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent text_25
      letterHeight = 0.08
      pos = (0, -.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent Loading_50
      fillColor = white
      pos = (-0.25, 0)
      shape = rectangle
      size = (.5, 0.1)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
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    TextComponent text_50
      letterHeight = 0.08
      pos = (0, -.2)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent Loading_75
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent text_75
      letterHeight = 0.08
      pos = (0, -.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent Loading_100
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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    TextComponent text_100
      letterHeight = 0.08
      pos = (0, -.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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  Routine Partner_Match
    TextComponent Youhavematched
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = You have matched with:
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    TextComponent PartnerName
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text = $partner
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    ImageComponent image
      image = Images/sunglass emoji.jpeg
      size = (0.25, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PressToContinue
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press space to continue.
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  Routine Photo_Share
    TextComponent partnername
      letterHeight = 0.05
      pos = (.2, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $partner
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    TextComponent Photo_One
      letterHeight = 0.05
      pos = (-0.08, .45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = This photo is now being shared with
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    ImageComponent Image_One
      image = Images/Image_One.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please wait for feedback.
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    CodeComponent code_10
      Code Type = Auto->JS
  Routine Waitingforfeedback
    TextComponent text_5
      letterHeight = 0.1
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Waiting…
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  Routine Feedback_2
    TextComponent text_4
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $feedbackresponses
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    ImageComponent image_7
      image [set every frame] = $Graphic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_11
      Code Type = Auto->JS
  Routine Fixation
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Choice
    TextComponent lottery_game_choice
      letterHeight = .04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        You now have the option to play a lottery game! The game is guessing whether a facedown card is will be higher or lower than a certain number.

        You may have chose to have the computer play on your behalf or you may play yourself. If you would like the computer to play on your behalf press ‘c’. If you would like to play press ‘m’.

        If you chose to play, you will have 3 seconds to record your choice.
    TextComponent computer
      letterHeight = 0.05
      pos = (-.3, -.25)
      startVal [time (s)] = 0.0
      text = Computer
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    TextComponent self_selected
      letterHeight = 0.05
      pos = (0.3, -.25)
      startVal [time (s)] = 0.0
      text = Self
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    KeyboardComponent key_resp_4
      allowedKeys = 'c','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        response_msg = ' '
        feedback_msg = ' '
        computer_choice = ['lower','higher']
      Each Frame:
        import random
        random_entry = random.choice(computer_choice)
  Routine Lotterycomputerchoice
    TextComponent lotterycard
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 5.
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    ImageComponent Block1_facedowncard
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        response_msg = (f'The computer has chosen {random_entry}.')
        if key_resp_4.keys == 'm':
            continueRoutine = False
      Each Frame:
        #if not Friend_TaskLoop.thisN in [29, 59]: # establishes two blocks per 32 trials
        #    continueRoutine = False # if not trial 31 or 63, skip routine completely
        #else:
        #    Friend_TaskLoop.finished = False
    TextComponent computerresponse
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text [set every repeat] = $response_msg
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  Routine Lotteryselfchoice
    TextComponent pickacard
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Please select whether you believe the card will be higher or lower than 5. Press ‘h’ for higher or ‘l’ for lower.
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    TextComponent high
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Higher
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    TextComponent low
      letterHeight = 0.05
      pos = (-.3, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Lower
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_4.keys == 'c':
            continueRoutine = False
      Each Frame:
        if key_resp_5.keys == 'l':
            feedback_msg = (f'You have chosen lower.')
        elif key_resp_5.keys == 'h':
            feedback_msg = (f'You have chosen higher.')
        else:
            feedback_msg = (f'No response recorded.')
        responsefeedback.setText(feedback_msg)
        print(key_resp_5.keys)
        print(feedback_msg)

        #import random
        #random_entry = random.choice(computer_choice)
        #if  key_resp_4.keys == 'c':
        #    response_msg = (f'The computer has chosen {random_entry}.')
        #elif key_response_4.keys == 'm':
        #    setautodraw(False)
        #    if key_resp_5 == 'h':
        #        response_msg = (f'You chose higher.')
        #    elif key_resp_5 == 'l':
        #        response_msg = (f'You chose lower.')
        #else:
        #    response_msg = (f'Choice not recorded.')
    TextComponent responsefeedback
      letterHeight = 0.05
      pos = (0, -0.39)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
      text [set every repeat] = $feedback_msg
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    ImageComponent block1_cardimage
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine Continue
    TextComponent block1_continue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to resume sharing your photos.
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Conditionselection
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        for i in condition[block]:
            if condition[block] == 'Rej':
                condition_outcome_freq = 70
                partner = 'Charlie'
                feedbackresponses = '%s %s your photo.'%(partner,'disliked')
                print(condition[block])
                print(condition_outcome_freq)
                print(partner)
                print(feedbackresponses)
            elif condition[block] == 'Acc':
                condition_outcome_freq = 30
                partner = 'Sam'
                feedbackresponses ='%s %s your photo.'%(partner,'disliked')
                print(condition[block])
                print(condition_outcome_freq)
                print(partner)
            `   print(feedbackresponses)
            elif condition[block] == 'Neutral':
                condition_outcome_freq = 50
                partner = 'Riley'
                feedbackresponses ='%s %s your photo.'%(partner,'disliked')
                print(condition[block])
                print(condition_outcome_freq)
                print(partner)
                print(feedbackresponses)
      Each Frame:
        block = block+1
      End Routine:
        block = block+1
  Routine Blockcounter
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        block = block+1
Flow
  Routine Welcome_Screen
  Routine First_Instructions
  LoopInitiator entiretaskloop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Conditionselection
    Routine WaitingToMatch
    Routine Partner_Match
    LoopInitiator choiceloop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      LoopInitiator photoloop loopType="TrialHandler"
        conditionsFile = Feedback/Feedback_Charlie.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'Graphic': 'Feedback/thumbs down emoji.jpeg', 'Response': 'Charlie liked your photo!'},
          {'Graphic': 'Feedback/ThumbsUp.jpeg', 'Response': 'Charlie disliked your photo.'}]
        Routine Photo_Share
        Routine Waitingforfeedback
        Routine Feedback_2
        Routine Fixation
      LoopTerminator photoloop
      Routine Choice
      Routine Lotterycomputerchoice
      Routine Lotteryselfchoice
      Routine Continue
      Routine Blockcounter
    LoopTerminator choiceloop
  LoopTerminator entiretaskloop
